PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Teamprojekt
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine StartScreen
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    TextComponent textStartMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Start der Testphase

        Drücken Sie die Leertaste, um zu beginnen.
    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine trialPortal1
    RoutineSettingsComponent trialPortal1
      disabled = True
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  Routine trialPortal2
    RoutineSettingsComponent trialPortal2
      disabled = True
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  Routine blankVariable
    RoutineSettingsComponent blankVariable
      disabled = True
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  Routine trialBarrier1
    RoutineSettingsComponent trialBarrier1
      disabled = True
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    PolygonComponent ternusObjLeft_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_3
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialBarrier2
    RoutineSettingsComponent trialBarrier2
      disabled = True
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    PolygonComponent ternusObjLeft_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_4
      fillColor [set every repeat] = $objectColor
      lineColor [set every repeat] = $objectColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_4
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard1
    RoutineSettingsComponent trialStandard1
      disabled = True
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    PolygonComponent ternusObjLeft_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_5
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard2
    RoutineSettingsComponent trialStandard2
      disabled = True
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    PolygonComponent ternusObjLeft_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_6
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    KeyboardComponent keyStandard
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ternusFrame1
    CodeComponent codeObjectParameters
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 0
      Begin Routine:
        colorList = [
            "red", "green", "blue", "yellow",
            "magenta", "cyan", "orange", "purple"
        ]

        causalColor = np.random.choice(colorList)

        ternusDuration = 0.2

        # default: invisible causal objects
        portalOpacity = 0
        barrierOpacity = 0

        # default Ternus color
        ternusColor = "black"

        if condition == "Portal":
            portalOpacity = 1
            barrierOpacity = 0
            ternusColor = causalColor

        elif condition == "Barrier":
            portalOpacity = 0
            barrierOpacity = 1
            ternusColor = causalColor

        elif condition == "Standard":
            portalOpacity = 0
            barrierOpacity = 0
            ternusColor = "black"

        thisExp.addData("causalColor", causalColor)
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    PolygonComponent ternusObjLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalLeft
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos = (2, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blankISI
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    PolygonComponent FixationCrossBlank
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interstim_interval
      units = deg
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  Routine ternusFrame2
    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
    PolygonComponent ternusObjLeft_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight_2
      fillColor [set every repeat] = $ternusColor
      lineColor [set every repeat] = $ternusColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeft_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos = (2, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blockBreak
    CodeComponent codeBlockCount
      Code Type = Auto->JS
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      Begin Routine:
        blockNumber += 1

        breakText = (
            "Sehr gut! Du hast Block " +str(blockNumber) + " von 10 abgeschlossen.\n\n"
            "Mach gerne eine kurze Pause.\n\n"
            "Bitte drücke die 'F'-Taste, wenn sich die Elemente unabhängig voneinander bewegen "
            "(Elementbewegung), und die 'J'-Taste, wenn sich die Elemente gemeinsam "
            " bewegen (Gruppenbewegung).\n\n"
            "Drücke die Leertaste, um mit dem nächsten Block fortzufahren."
        )
    KeyboardComponent keyBlockContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
    TextComponent textBlockInstructions
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakText
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  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das Experiment ist abgeschlossen!

        Du kannst den Arbeitsplatz jetzt verlassen und dem Versuchsleiter Bescheid geben.

        Vielen Dank für die Teilnahme!
  Routine blank800
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    PolygonComponent FixationCrossBlank800
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = deg
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  Routine InstructionScreen
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    TextComponent textInstructions
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Im folgenden Teil der Studie siehst du wiederholt kurze Abfolgen von drei Kreisen.

        Zwischen den beiden Darstellungen können die Kreise auf unterschiedliche Weise wahrgenommen werden:


        • Bei einer Gruppenbewegung scheinen sich alle drei Kreise gemeinsam als Gruppe nach rechts zu bewegen.

        • Bei einer Elementbewegung scheint der linke Kreis zu verschwinden, während gleichzeitig rechts ein neuer Kreis erscheint.


        Die beiden mittleren Kreise scheinen dabei an ihrer Position zu bleiben.

        Deine Aufgabe besteht darin, bei jedem Durchgang anzugeben, welche Wahrnehmung du hattest.

        Drücke:

        F = Elementbewegung

        J = Gruppenbewegung

        Es gibt keine richtigen oder falschen Antworten. Bitte gib jeweils die Wahrnehmung an, die deinem Eindruck am besten entspricht.

         Zunächst siehst du zwei Beispiele und bearbeitest anschließend einige Übungsdurchgänge.

        Drücke die Leertaste, um fortzufahren.
    KeyboardComponent keyInstructionContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankExample
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  Routine ternusExampleFrame2
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  Routine ternusExampleFrame1
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Flow
  Routine InstructionScreen
  Routine StartScreen
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = trialLoopConditionsTeamprojekt.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'condition': 'Portal', 'interstim_interval': 0},
        {'condition': 'Portal', 'interstim_interval': 0.01},
        {'condition': 'Portal', 'interstim_interval': 0.02},
        {'condition': 'Portal', 'interstim_interval': 0.04},
        {'condition': 'Portal', 'interstim_interval': 0.08},
        {'condition': 'Portal', 'interstim_interval': 0.16},
        {'condition': 'Barrier', 'interstim_interval': 0},
        {'condition': 'Barrier', 'interstim_interval': 0.01},
        {'condition': 'Barrier', 'interstim_interval': 0.02},
        {'condition': 'Barrier', 'interstim_interval': 0.04},
        {'condition': 'Barrier', 'interstim_interval': 0.08},
        {'condition': 'Barrier', 'interstim_interval': 0.16},
        {'condition': 'Standard', 'interstim_interval': 0},
        {'condition': 'Standard', 'interstim_interval': 0.01},
        {'condition': 'Standard', 'interstim_interval': 0.02},
        {'condition': 'Standard', 'interstim_interval': 0.04},
        {'condition': 'Standard', 'interstim_interval': 0.08},
        {'condition': 'Standard', 'interstim_interval': 0.16}]
      Routine ternusFrame1
      Routine blankISI
      Routine ternusFrame2
      Routine blank800
    LoopTerminator trialLoop
    Routine blockBreak
  LoopTerminator blockLoop
  Routine EndScreen
